PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '999', 'run': '999', 'stimuli': '999'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1536, 864]
  expName = video_presentation
  keyboardBackend = ioHub
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Routines
  Routine waiting_for_scanner
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    KeyboardComponent key_resp_start
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        from glob import glob
        import pandas as pd
        import numpy as np
        import os
      Begin Experiment:
        participant = expInfo['participant']
        session = expInfo['session']
        run = expInfo['run']
        stimuli = expInfo['stimuli']


        # Get images
        #image_path = "C:/Users/dariu/Documents/PhD/ImageGeneration/animal-images"
        #video_path = "C:/Users/dariu/Documents/PhD/ImageGeneration/animal-videos/processed"
        video_path = f"processed_run-{stimuli}"

        #image_list = glob(f"{image_path}/*")
        #image_list = os.listdir(image_path)[:2]
        video_list = os.listdir(video_path)
        video_list.remove("dummy.mp4")

        #all_list = image_list + video_list

        # Intialize dataframe
        df = pd.DataFrame()
        df["file"] = video_list
        df["trial"] = [file.split(".")[0] for file in df["file"]]
        #df["type"] = ["image" if ".png" in file else "video" for file in df["file"]]
        df["category"] = [file.split("_")[0] for file in df["file"]]
        df["onset"] = np.empty(len(video_list)) * np.nan
        df["duration"] = np.empty(len(video_list)) * np.nan
        df["keys"] = np.empty(len(video_list)) * np.nan


        num_dummy_trials = 15
        dummy_df = pd.DataFrame({
            "trial": [f"dummy_{i}" for i in range(num_dummy_trials)],
            "category": ["dummy"] * num_dummy_trials,
            "file": ["dummy.mp4"] * num_dummy_trials})


        df = pd.concat([df, dummy_df], axis=0, ignore_index=True)
        print(df)

        # Get duplicate trials
        #dup_index = run
        #df_dup = df[df["file"].str.contains(f"_{run}.mp4") & ~df["file"].str.contains("rabbit")]
        #df = pd.concat([df, df_dup], ignore_index=True)

        # Random shuffle
        df = df.sample(frac=1).reset_index(drop=True)
      End Routine:
        timer = core.Clock(0)
    TextComponent text
      color = black
      flip = horiz
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for scanner...
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  Routine dummy
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    TextComponent dummy_fixation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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  Routine end
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    TextComponent end_text
      color = black
      flip = horiz
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text = +
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  Routine video_trial
    RoutineSettingsComponent video_trial
      disabled = True
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    CodeComponent video_trial_code
      Code Type = Py
      Begin Routine:
        if ".mp4" not in df["file"][trials.thisN]:
            is_active = False
            continueRoutine = False
        else:
            is_active = True


        if is_active:
            df.at[trials.thisN, "onset"] = timer.getTime()
      End Routine:
        if is_active:
            df.at[trials.thisN, "duration"] = timer.getTime() - df.at[trials.thisN, "onset"]
            df.to_csv("df.txt", index_label="index")
  Routine washout
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    TextComponent fixation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine pause
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    CodeComponent pause_code
      Code Type = Py
      Begin Routine:
        if (not trials.thisN % 15 == 0) or (trials.thisN == 0):
            continueRoutine = False
        else:
            frac_completed = int((trials.thisN + 1) * 100 / len(df))
            break_text.text = f"Break\n\n{frac_completed}% of trials completed\n\nAlert experimenter when you wish to continue"
      Each Frame:
        if key_resp_pause.keys == 'space':
            current_time = timer.getTime()
            margin = current_time - round(current_time) # Should be between 0 and 0.01
            if (margin >= 0) & (margin < 0.01):
                continueRoutine = False
    TextComponent break_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent image_trial_code
      Code Type = Py
      Begin Routine:
        #if ".png" in df["file"][trials.thisN]:
        #    image_file_path = os.path.join(image_path, df.at[trials.thisN, "file"])
        #    image_opacity = 1
        #elif ".mp4" in df["file"][trials.thisN]:
        #    video_file_path = os.path.join(video_path, df.at[trials.thisN, "file"])
        #    image_opacity = 0
        #
        #
        #if ".png" not in df["file"][trials.thisN]:
        #    is_active = False
        #    continueRoutine = False
        #else:
        #    is_active = True
        #
        #if is_active:
        df.at[trials.thisN, "onset"] = timer.getTime()
        flipped = False

        #debug_text.text = df.at[trials.thisN, "trial"]
        #
      Each Frame:
        if not flipped:
            movie.setFlipHoriz(True)
            flipped = True
      End Routine:
        #if is_active:
        df.at[trials.thisN, "duration"] = timer.getTime() - df.at[trials.thisN, "onset"]
        if key_resp_trial.keys:
            df.at[trials.thisN, "keys"] = key_resp_trial.keys


        if not os.path.exists(f"data/{participant}"):
            os.makedirs(f"data/{participant}")

        df.to_csv(f"data/{participant}/sub-{participant}_ses-{session}_run-{run}_stimuli-{stimuli}_trials.txt", index_label="index", sep="\t")
    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $os.path.join(video_path, df.at[trials.thisN, "file"])
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent key_resp_trial
      allowedKeys = 'b','y'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent debug_text
      color = black
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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Flow
  Routine waiting_for_scanner
  Routine dummy
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(df)
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    Routine trial
    Routine washout
  LoopTerminator trials
  Routine end
